PsychoPy2experiment version="2021.1.2"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=135E4CDB
  Data filename = u'data/%s_%s_%s' % (expInfo['participant_code'], expName, expInfo['date'])
  Experiment info = {'participant_code': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = Online_ToM
  logging level = debug
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Routines
  Routine instructions
    TextComponent intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 10
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      text:
        In this game, you are going to play a card game with a virtual partner.

        Your goal is to guess the choice of the virtual partner.

        For each trial you will select your answer by pressing
        the left of right arrow of your keyboard.

        When you are ready, press SPACE.
    KeyboardComponent key_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine player
    ImageComponent start
      image = images/Start.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      correctAns = $resp_agent
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Practice_trial
    TextComponent practice
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        First, we will start with practice trials to let you familiarize wth the task.

        Press SPACE when you are ready to start
    KeyboardComponent key_start_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine realtask
    TextComponent Task
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now, we will start the task.

        Press SPACE when you are ready to start
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback_practice
    ImageComponent picture1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    CodeComponent imagespractice
      Code Type = Auto->JS
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      Begin Experiment:
        Loose_B = "images/Loose-Blue.png"
        Loose_R = "images/Loose-Red.png"
        Win_B = "images/Win-Blue.png"
        Win_R = "images/Win-Red.png"
      Begin Routine:
        if key_resp_2.keys =="left" and resp_agent == "left":
            picture1.image = Win_B
        elif key_resp_2.keys =="left" and resp_agent == "right":
            picture1.image = Loose_B
        elif key_resp_2.keys =="right" and resp_agent == "right":
            picture1.image = Win_R
        elif key_resp_2.keys =="right" and resp_agent == "left":
            picture1.image = Loose_R
    ImageComponent picture3
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 0.75
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    CodeComponent feedback
      Code Type = Auto->JS
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      Begin Experiment:
        Win = "images/Win.png"
        Lose = "images/Lose.png"
      Begin Routine:
        if key_resp_2.keys =="left" and resp_agent == "left":
            picture3.image = Win
        elif key_resp_2.keys =="left" and resp_agent == "right":
            picture3.image = Lose
        elif key_resp_2.keys =="right" and resp_agent == "right":
            picture3.image = Win
        elif key_resp_2.keys =="right" and resp_agent == "left":
            picture3.image = Lose
  Routine end
    TextComponent thank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for your time and participation.

        Please press SPACE to record your answers.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine Practice_trial
  LoopInitiator trial0 loopType="TrialHandler"
    conditionsFile = Practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Condition': 'practice', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left', 'image_agent': 'images/Loose-Red.png', 'score': 'Your score is '},
      {'Condition': 'practice', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left', 'image_agent': 'images/Loose-Red.png', 'score': 'Your score is '},
      {'Condition': 'practice', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left', 'image_agent': 'images/Loose-Red.png', 'score': 'Your score is '},
      {'Condition': 'practice', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left', 'image_agent': 'images/Win-Red.png', 'score': 'Your score is '},
      {'Condition': 'practice', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left', 'image_agent': 'images/Win-Red.png', 'score': 'Your score is '},
      {'Condition': 'practice', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'right', 'image_agent': 'images/Loose-Blue.png', 'score': 'Your score is '},
      {'Condition': 'practice', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'right', 'image_agent': 'images/Loose-Blue.png', 'score': 'Your score is '},
      {'Condition': 'practice', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'right', 'image_agent': 'images/Win-Blue.png', 'score': 'Your score is '}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
    Routine player
    Routine feedback_practice
  LoopTerminator trial0
  Routine realtask
  LoopInitiator outloop loopType="TrialHandler"
    conditionsFile = Randomization.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'loop50': 0, 'loop60': 0, 'loop70': 0, 'loop80': 1},
      {'loop50': 0, 'loop60': 0, 'loop70': 1, 'loop80': 0},
      {'loop50': 0, 'loop60': 1, 'loop70': 0, 'loop80': 0},
      {'loop50': 1, 'loop60': 0, 'loop70': 0, 'loop80': 0}]
    LoopInitiator trial50 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = loop50
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      LoopInitiator TOM_50 loopType="TrialHandler"
        conditionsFile = ToM_50.xlsx
        loopType = random
        nReps = 3
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        conditions:
          [{'Condition': 'bias50', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left'},
          {'Condition': 'bias50', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left'},
          {'Condition': 'bias50', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left'},
          {'Condition': 'bias50', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left'},
          {'Condition': 'bias50', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left'},
          {'Condition': 'bias50', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'right'},
          {'Condition': 'bias50', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'right'},
          {'Condition': 'bias50', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'right'},
          {'Condition': 'bias50', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'right'},
          {'Condition': 'bias50', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'right'}]
        Routine player
        Routine feedback_practice
      LoopTerminator TOM_50
    LoopTerminator trial50
    LoopInitiator trial60 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = loop60
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      LoopInitiator TOM_60 loopType="TrialHandler"
        conditionsFile = ToM_60.xlsx
        loopType = random
        nReps = 3
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        conditions:
          [{'Condition': 'bias60', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left'},
          {'Condition': 'bias60', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left'},
          {'Condition': 'bias60', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left'},
          {'Condition': 'bias60', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left'},
          {'Condition': 'bias60', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left'},
          {'Condition': 'bias60', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left'},
          {'Condition': 'bias60', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'right'},
          {'Condition': 'bias60', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'right'},
          {'Condition': 'bias60', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'right'},
          {'Condition': 'bias60', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'right'}]
        Routine player
        Routine feedback_practice
      LoopTerminator TOM_60
    LoopTerminator trial60
    LoopInitiator trial70 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = loop70
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      LoopInitiator TOM_70 loopType="TrialHandler"
        conditionsFile = ToM_70.xlsx
        loopType = random
        nReps = 3
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        conditions:
          [{'Condition': 'bias70', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left'},
          {'Condition': 'bias70', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left'},
          {'Condition': 'bias70', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left'},
          {'Condition': 'bias70', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'right'},
          {'Condition': 'bias70', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'right'},
          {'Condition': 'bias70', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'right'},
          {'Condition': 'bias70', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'right'},
          {'Condition': 'bias70', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'right'},
          {'Condition': 'bias70', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'right'},
          {'Condition': 'bias70', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'right'}]
        Routine player
        Routine feedback_practice
      LoopTerminator TOM_70
    LoopTerminator trial70
    LoopInitiator trial80 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = loop80
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      LoopInitiator TOM_80 loopType="TrialHandler"
        conditionsFile = ToM_80.xlsx
        loopType = random
        nReps = 3
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        conditions:
          [{'Condition': 'bias80', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left'},
          {'Condition': 'bias80', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left'},
          {'Condition': 'bias80', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left'},
          {'Condition': 'bias80', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left'},
          {'Condition': 'bias80', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left'},
          {'Condition': 'bias80', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left'},
          {'Condition': 'bias80', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left'},
          {'Condition': 'bias80', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'left'},
          {'Condition': 'bias80', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'right'},
          {'Condition': 'bias80', 'text1': 'You choose ', 'text2': 'Our partner choose ', 'resp_agent': 'right'}]
        Routine player
        Routine feedback_practice
      LoopTerminator TOM_80
    LoopTerminator trial80
  LoopTerminator outloop
  Routine end
